CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:405
GitHash:
ModuleCount:24
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:(?P<Drug>.*)_(?P<Conc>.*)_(?P<Rep>.*)_R(?P<Field>[0-9])_(?P<Channel>.*).tif
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Match metadata:[{'DNA': 'Drug', 'ERK': 'Drug'}, {'DNA': 'Conc', 'ERK': 'Conc'}, {'DNA': 'Rep', 'ERK': 'Rep'}, {'DNA': 'Field', 'ERK': 'Field'}]
    Image set matching method:Metadata
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    Assignments count:2
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "ch00")
    Name to assign these images:ERK
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    Select the image type:Color image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "ch01")
    Name to assign these images:DNA
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    Select the image type:Color image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
ColorToGray:[module_num:5|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
    Select the input image:DNA
    Conversion method:Split
    Image type:RGB
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    Convert red to gray?:No
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    Convert green to gray?:No
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    Convert blue to gray?:Yes
    Name the output image:DNAGray
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
ColorToGray:[module_num:6|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
    Select the input image:ERK
    Conversion method:Split
    Image type:RGB
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    Convert red to gray?:No
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    Convert green to gray?:Yes
    Name the output image:ERKGray
    Convert blue to gray?:No
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
IdentifyPrimaryObjects:[module_num:7|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
    Select the input image:DNAGray
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):12,50
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Display accepted local maxima?:No
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    Use advanced settings?:Yes
    Threshold setting version:11
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.1,1.0
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    Two-class or three-class thresholding?:Two classes
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
OverlayOutlines:[module_num:8|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:DNAGray
    Name the output image:NucleiSeg
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:Red
    Select objects to display:Nuclei

SaveImages:[module_num:9|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
    Select the type of image to save:Image
    Select the image to save:NucleiSeg
    Select method for constructing file names:From image filename
    Select image name for file prefix:DNA
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:Otsu_
    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|Test
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
IdentifySecondaryObjects:[module_num:10|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
    Select the input objects:Nuclei
    Name the objects to be identified:Cells
    Select the method to identify the secondary objects:Propagation
    Select the input image:ERKGray
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    Regularization factor:0.1
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:No
    Threshold setting version:11
    Threshold strategy:Adaptive
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    Threshold smoothing scale:0.0
    Threshold correction factor:0.8
    Lower and upper bounds on threshold:0.05,1.0
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    Size of adaptive window:20
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    Thresholding method:Sauvola

IdentifyTertiaryObjects:[module_num:11|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
    Select the larger identified objects:Cells
    Select the smaller identified objects:Nuclei
    Name the tertiary objects to be identified:Cytoplasm
    Shrink smaller object prior to subtraction?:Yes

MeasureObjectIntensity:[module_num:12|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
    Select images to measure:ERKGray
    Select objects to measure:Cytoplasm, Nuclei

CalculateMath:[module_num:13|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
    Name the output measurement:RatioMedian
    Operation:Divide
    Select the numerator measurement type:Object
    Select the numerator objects:Cytoplasm
    Select the numerator measurement:Intensity_MedianIntensity_ERKGray
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the denominator measurement type:Object
    Select the denominator objects:Nuclei
    Select the denominator measurement:Intensity_MedianIntensity_ERKGray
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:1.0
    Raise the power of result by:1.0
    Add to the result:0.0
    How should the output value be rounded?:Not rounded
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    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
OverlayOutlines:[module_num:14|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:ERKGray
    Name the output image:Overlay
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:cyan
    Select objects to display:Nuclei
    Select outline color:Green
    Select objects to display:Cells

DisplayDataOnImage:[module_num:15|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
    Display object or image measurements?:Object
    Select the input objects:Nuclei
    Measurement to display:Number_Object_Number
    Select the image on which to display the measurements:Overlay
    Text color:white
    Name the output image that has the measurements displayed:DisplayImage
    Font size (points):10
    Number of decimals:0
    Image elements to save:Image
    Annotation offset (in pixels):0
    Display mode:Text
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    Display background image?:Yes
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
SaveImages:[module_num:16|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
    Select the type of image to save:Image
    Select the image to save:DisplayImage
    Select method for constructing file names:From image filename
    Select image name for file prefix:ERK
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_Overlay
    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|Output
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
EnhanceOrSuppressFeatures:[module_num:17|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
    Select the input image:ERKGray
    Name the output image:ERKenhanced
    Select the operation:Enhance
    Feature size:10
    Feature type:Neurites
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    Smoothing scale:2.0
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    Enhancement method:Tubeness
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    Rescale result image:No

MorphologicalSkeleton:[module_num:18|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enabled:False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
    Select the input image:ERKGray
    Name the output image:MorphologicalSkeleton

Morph:[module_num:19|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
    Select the input image:ERKenhanced
    Name the output image:MorphERK
    Select the operation to perform:skelpe
    Number of times to repeat operation:Forever
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    Select the operation to perform:clean
    Number of times to repeat operation:Once
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
SaveImages:[module_num:20|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
    Select the type of image to save:Image
    Select the image to save:MorphERK
    Select method for constructing file names:From image filename
    Select image name for file prefix:ERK
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    Append a suffix to the image file name?:No
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    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|Morph
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
IdentifySecondaryObjects:[module_num:21|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
    Select the input objects:Nuclei
    Name the objects to be identified:Body
    Select the method to identify the secondary objects:Distance - B
    Select the input image:ERKGray
    Number of pixels by which to expand the primary objects:5
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    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:No
    Threshold setting version:11
    Threshold strategy:Adaptive
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    Threshold smoothing scale:0.0
    Threshold correction factor:0.8
    Lower and upper bounds on threshold:0.1,1.0
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    Two-class or three-class thresholding?:Two classes
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    Size of adaptive window:10
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    Thresholding method:Otsu

MeasureObjectSkeleton:[module_num:22|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
    Select the seed objects:Body
    Select the skeletonized image:MorphERK
    Retain the branchpoint image?:Yes
    Name the branchpoint image:BranchpointImage
    Fill small holes?:Yes
    Maximum hole size:5
    Export the skeleton graph relationships?:No
    Intensity image:None
    File output directory:Default Output Folder|
    Vertex file name:vertices.csv
    Edge file name:edges.csv

SaveImages:[module_num:23|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
    Select the type of image to save:Image
    Select the image to save:BranchpointImage
    Select method for constructing file names:From image filename
    Select image name for file prefix:ERK
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    Append a suffix to the image file name?:No
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    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|BranchImages
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
ExportToSpreadsheet:[module_num:24|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Add image file and folder names to your object data file?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
    Press button to select measurements:Nuclei|Math_RatioMedian,Body|Parent_Nuclei,Body|ObjectSkeleton_TotalObjectSkeletonLength_MorphERK,Body|ObjectSkeleton_NumberBranchEnds_MorphERK
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:TE671_
    Overwrite existing files without warning?:Yes
    Data to export:Nuclei
    Combine these object measurements with those of the previous object?:No
    File name:KTR.csv
    Use the object name for the file name?:No
    Data to export:Body
    Combine these object measurements with those of the previous object?:Yes
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    Use the object name for the file name?:Yes
