CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:405
GitHash:
ModuleCount:21
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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notes:['The Metadata module optionally allows you to extract information describing your images (i.e, metadata) which will be stored along with your measurements. This information can be contained in the file name and/or location, or in an external file.', '', 'LT: If file name starts from something different than TileScan 0-9 then change it in regular expression.']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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:(?P<Drug>.*)_(?P<Conc>.*)_(?P<Rep>.*)_R(?P<Field>[0-9])_(?P<Channel>.*).tif
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Match metadata:[{'Green': 'Drug', 'Red': 'Drug'}, {'Green': 'Conc', 'Red': 'Conc'}, {'Green': 'Rep', 'Red': 'Rep'}, {'Green': 'Field', 'Red': 'Field'}]
    Image set matching method:Metadata
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    Assignments count:2
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "ch00")
    Name to assign these images:Green
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    Select the image type:Color image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "ch02")
    Name to assign these images:Red
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    Select the image type:Color image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
ColorToGray:[module_num:5|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
    Select the input image:Green
    Conversion method:Combine
    Image type:RGB
    Name the output image:GrayG
    Relative weight of the red channel:0.0
    Relative weight of the green channel:1.0
    Relative weight of the blue channel:0.0
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
ColorToGray:[module_num:6|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
    Select the input image:Red
    Conversion method:Combine
    Image type:RGB
    Name the output image:GrayR
    Relative weight of the red channel:1.0
    Relative weight of the green channel:0.0
    Relative weight of the blue channel:0.0
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
ImageMath:[module_num:7|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
    Operation:Add
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:GrayGR
    Image or measurement?:Image
    Select the first image:GrayG
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:GrayR
    Multiply the second image by:1.0
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
IdentifyPrimaryObjects:[module_num:8|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
    Select the input image:GrayGR
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):15,50
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Display accepted local maxima?:No
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    Use advanced settings?:Yes
    Threshold setting version:11
    Threshold strategy:Adaptive
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    Threshold smoothing scale:1.3488
    Threshold correction factor:0.4
    Lower and upper bounds on threshold:0.08,1.0
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    Two-class or three-class thresholding?:Two classes
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    Size of adaptive window:100
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    Thresholding method:Otsu

OverlayOutlines:[module_num:9|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:GrayGR
    Name the output image:GROverlay
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:cyan
    Select objects to display:Nuclei

SaveImages:[module_num:10|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
    Select the type of image to save:Image
    Select the image to save:GROverlay
    Select method for constructing file names:From image filename
    Select image name for file prefix:Green
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_GR
    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|Test
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
IdentifyPrimaryObjects:[module_num:11|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enabled:False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
    Select the input image:GrayR
    Name the primary objects to be identified:NucleiR
    Typical diameter of objects, in pixel units (Min,Max):15,50
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Display accepted local maxima?:No
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    Use advanced settings?:Yes
    Threshold setting version:11
    Threshold strategy:Adaptive
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    Threshold smoothing scale:1.3488
    Threshold correction factor:0.5
    Lower and upper bounds on threshold:0.08,1.0
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    Two-class or three-class thresholding?:Two classes
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    Size of adaptive window:100
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    Thresholding method:Otsu

CombineObjects:[module_num:12|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enabled:False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
    Select initial object set:NucleiG
    Select object set to combine:NucleiR
    Select how to handle overlapping objects:Merge
    Name the combined object set:Nuclei

OverlayOutlines:[module_num:13|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enabled:False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
    Display outlines on a blank image?:No
    Select image on which to display outlines:GrayG
    Name the output image:GreenOverlay
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:cyan
    Select objects to display:NucleiG

SaveImages:[module_num:14|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enabled:False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
    Select the type of image to save:Image
    Select the image to save:GreenOverlay
    Select method for constructing file names:From image filename
    Select image name for file prefix:Green
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    Append a suffix to the image file name?:No
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    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|Test
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
OverlayOutlines:[module_num:15|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enabled:False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
    Display outlines on a blank image?:No
    Select image on which to display outlines:GrayR
    Name the output image:RedOverlay
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:cyan
    Select objects to display:NucleiR

SaveImages:[module_num:16|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enabled:False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
    Select the type of image to save:Image
    Select the image to save:RedOverlay
    Select method for constructing file names:From image filename
    Select image name for file prefix:Red
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    Append a suffix to the image file name?:No
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    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|Test
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
OverlayOutlines:[module_num:17|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enabled:False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
    Display outlines on a blank image?:No
    Select image on which to display outlines:GrayG
    Name the output image:CombOverlay
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:cyan
    Select objects to display:Nuclei

SaveImages:[module_num:18|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enabled:False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
    Select the type of image to save:Image
    Select the image to save:CombOverlay
    Select method for constructing file names:From image filename
    Select image name for file prefix:Green
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_Combined
    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|Test
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
MeasureObjectIntensity:[module_num:19|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
    Select images to measure:GrayG, GrayR
    Select objects to measure:Nuclei

CalculateMath:[module_num:20|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
    Name the output measurement:Ratio
    Operation:Divide
    Select the numerator measurement type:Object
    Select the numerator objects:Nuclei
    Select the numerator measurement:Intensity_MeanIntensity_GrayG
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the denominator measurement type:Object
    Select the denominator objects:Nuclei
    Select the denominator measurement:Intensity_MeanIntensity_GrayR
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:1.0
    Raise the power of result by:1.0
    Add to the result:0.0
    How should the output value be rounded?:Not rounded
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    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
ExportToSpreadsheet:[module_num:21|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Add image file and folder names to your object data file?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
    Press button to select measurements:Nuclei|Intensity_IntegratedIntensity_GrayR,Nuclei|Intensity_IntegratedIntensity_GrayG,Nuclei|Intensity_MeanIntensity_GrayR,Nuclei|Intensity_MeanIntensity_GrayG,Nuclei|Intensity_MedianIntensity_GrayR,Nuclei|Intensity_MedianIntensity_GrayG,Nuclei|Math_Ratio,Nuclei|Number_Object_Number
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:Result_
    Overwrite existing files without warning?:Yes
    Data to export:Nuclei
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
