CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:405
GitHash:
ModuleCount:10
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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notes:['The Metadata module optionally allows you to extract information describing your images (i.e, metadata) which will be stored along with your measurements. This information can be contained in the file name and/or location, or in an external file.', '', 'LT: If file name starts from something different than TileScan 0-9 then change it in regular expression.']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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:(?P<Drug>.*)_(?P<Conc>.*)_(?P<Rep>.*)_R(?P<Field>[0-9])_(?P<Channel>.*).tif
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Match metadata:[{'Green': 'Drug', 'Red': 'Drug'}, {'Green': 'Conc', 'Red': 'Conc'}, {'Green': 'Rep', 'Red': 'Rep'}, {'Green': 'Field', 'Red': 'Field'}]
    Image set matching method:Metadata
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    Assignments count:2
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "ch00")
    Name to assign these images:Green
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    Select the image type:Color image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "ch02")
    Name to assign these images:Red
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    Select the image type:Color image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
CorrectIlluminationCalculate:[module_num:5|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notes:['LT: Backgroung illumination correction. Uses all images for correction mask, recommended to use on all image set at once for best results.']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
    Select the input image:Green
    Name the output image:IllumGreen
    Select how the illumination function is calculated:Background
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    Block size:60
    Rescale the illumination function?:No
    Calculate function for each image individually, or based on all images?:All: First cycle
    Smoothing method:Fit Polynomial
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    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationApply:[module_num:6|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notes:['LT: Applies correction mask to KTR images']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
    Select the input image:Green
    Name the output image:CorrGreen
    Select the illumination function:IllumGreen
    Select how the illumination function is applied:Subtract
    Set output image values less than 0 equal to 0?:Yes
    Set output image values greater than 1 equal to 1?:Yes

SaveImages:[module_num:7|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notes:['LT: Save corrected KTR channel images to new folder (Corrected) with the same file name.']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
    Select the type of image to save:Image
    Select the image to save:CorrGreen
    Select method for constructing file names:From image filename
    Select image name for file prefix:Green
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    Append a suffix to the image file name?:No
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    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|Corrected
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
CorrectIlluminationCalculate:[module_num:8|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
    Select the input image:Red
    Name the output image:IllumRed
    Select how the illumination function is calculated:Background
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    Block size:60
    Rescale the illumination function?:No
    Calculate function for each image individually, or based on all images?:All: First cycle
    Smoothing method:Fit Polynomial
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    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationApply:[module_num:9|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
    Select the input image:Red
    Name the output image:CorrRed
    Select the illumination function:IllumGreen
    Select how the illumination function is applied:Subtract
    Set output image values less than 0 equal to 0?:Yes
    Set output image values greater than 1 equal to 1?:Yes

SaveImages:[module_num:10|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notes:['LT: Save initial DNA channel images to new folder(Corrected) with the same file name.']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
    Select the type of image to save:Image
    Select the image to save:CorrRed
    Select method for constructing file names:From image filename
    Select image name for file prefix:Red
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    Append a suffix to the image file name?:No
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    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|Corrected
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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